PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = vSearchAlpha4
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Routines
  Routine fixation1
    TextComponent fix1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine instruction1
    TextComponent instr1
      letterHeight = 0.05
      pos = [0,0.15]
      startVal [time (s)] = 0.0
      text = In this task you will see sets of shapes made of four different shapes as outlined below. Only press the 'b' key if you see the “T” shape, which is the last shape. Otherwise, press the 'm' key. There will be 6 shapes to observe. Press space to continue.
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    KeyboardComponent keyResp1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent l1ex
      image = L1.png
      pos = (-0.3, -0.15)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent l2ex
      image = L2.png
      pos = (-0.1, -0.15)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent t1ex
      image = T1.png
      pos = (0.1, -0.15)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent tTex
      image = TT.png
      pos = (0.3, -0.15)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        This is the end of the experiment.
        Thank you for your time.
  Routine trial1
    TextComponent trial1Fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent trial1L11
      image = L1.png
      pos [set every repeat] = [loc1,loc2]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial1L12
      image = L1.png
      pos [set every repeat] = [loc3,loc4]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial1L21
      image = L2.png
      pos [set every repeat] = [loc5,loc6]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial1L22
      image = L2.png
      pos [set every repeat] = [loc7,loc8]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial1T11
      image = T1.png
      pos [set every repeat] = [loc9,loc10]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial1T12
      image = T1.png
      pos [set every repeat] = [loc11,loc12]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial1TT
      image = TT.png
      pos [set every repeat] = [loc13,loc14]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent trial1Resp
      allowedKeys = 'b','m'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
      storeCorrect = True
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  Routine fixation2
    TextComponent fix2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine trial2
    TextComponent trial2Fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent trial2L11
      image = L1.png
      pos [set every repeat] = [loc1,loc2]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial2L12
      image = L1.png
      pos [set every repeat] = [loc3,loc4]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial2L21
      image = L2.png
      pos [set every repeat] = [loc5,loc6]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial2L22
      image = L2.png
      pos [set every repeat] = [loc7,loc8]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial2T11
      image = T1.png
      pos [set every repeat] = [loc9,loc10]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial2T12
      image = T1.png
      pos [set every repeat] = [loc11,loc12]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial2L13
      image = L1.png
      pos [set every repeat] = (loc13, loc14)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial2L14
      image = L1.png
      pos [set every repeat] = (loc15, loc16)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial2L23
      image = L2.png
      pos [set every repeat] = (loc17, loc18)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial2L24
      image = L2.png
      pos [set every repeat] = (loc19, loc20)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial2T13
      image = T1.png
      pos [set every repeat] = (loc21, loc22)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial2T14
      image = T1.png
      pos [set every repeat] = (loc23, loc24)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial2TT
      image = TT.png
      pos [set every repeat] = [loc25,loc26]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent trial2Resp
      allowedKeys = 'b','m'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
      storeCorrect = True
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  Routine breakTime1
    TextComponent breakText1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = A quick break before the next set of trials. The next set will have 12 shapes to observe. Press space to continue.
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    KeyboardComponent breakResp1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine breakTime2
    TextComponent breakText2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = A quick break before the next set of trials. The next set will have 18 shapes to observe. Press space to continue.
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    KeyboardComponent breakResp2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation3
    TextComponent fix3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine trial3
    TextComponent trial3Fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent trial3L11
      image = L1.png
      pos [set every repeat] = [loc1,loc2]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial3L12
      image = L1.png
      pos [set every repeat] = [loc3,loc4]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial3L21
      image = L2.png
      pos [set every repeat] = [loc5,loc6]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial3L22
      image = L2.png
      pos [set every repeat] = [loc7,loc8]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial3T11
      image = T1.png
      pos [set every repeat] = [loc9,loc10]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial3T12
      image = T1.png
      pos [set every repeat] = [loc11,loc12]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial3L13
      image = L1.png
      pos [set every repeat] = (loc13, loc14)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial3L14
      image = L1.png
      pos [set every repeat] = (loc15, loc16)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial3L23
      image = L2.png
      pos [set every repeat] = (loc17, loc18)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial3L24
      image = L2.png
      pos [set every repeat] = (loc19, loc20)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial3T13
      image = T1.png
      pos [set every repeat] = (loc21, loc22)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial3T14
      image = T1.png
      pos [set every repeat] = (loc23, loc24)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial3L15
      image = L1.png
      pos [set every repeat] = (loc25, loc26)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial3L16
      image = L1.png
      pos [set every repeat] = (loc27, loc28)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial3L25
      image = L2.png
      pos [set every repeat] = (loc29, loc30)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial3L26
      image = L2.png
      pos [set every repeat] = (loc31, loc32)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial3T15
      image = T1.png
      pos [set every repeat] = (loc33, loc34)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial3T16
      image = T1.png
      pos [set every repeat] = (loc35, loc36)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    ImageComponent trial3TT
      image = TT.png
      pos [set every repeat] = [loc37,loc38]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent trial3Resp
      allowedKeys = 'b','m'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
      storeCorrect = True
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Flow
  Routine instruction1
  LoopInitiator trials1 loopType="TrialHandler"
    conditionsFile = vSearchCond1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('loc1', 0.4), ('loc2', 0.0), ('loc3', -0.2), ('loc4', 0.2), ('loc5', 0.0), ('loc6', 0.0), ('loc7', -0.4), ('loc8', -0.2), ('loc9', 0.4), ('loc10', 0.2), ('loc11', 0.0), ('loc12', 0.2), ('loc13', None), ('loc14', None), ('corrAns', 'm')]),
      OrderedDict([('loc1', 0.4), ('loc2', -0.2), ('loc3', 0.4), ('loc4', 0.0), ('loc5', 0.2), ('loc6', 0.2), ('loc7', None), ('loc8', None), ('loc9', 0.0), ('loc10', 0.4), ('loc11', -0.2), ('loc12', 0.2), ('loc13', 0.4), ('loc14', 0.2), ('corrAns', 'b')]),
      OrderedDict([('loc1', 0.0), ('loc2', 0.2), ('loc3', 0.4), ('loc4', -0.2), ('loc5', -0.4), ('loc6', -0.2), ('loc7', 0.0), ('loc8', -0.4), ('loc9', 0.2), ('loc10', 0.2), ('loc11', None), ('loc12', None), ('loc13', 0.2), ('loc14', -0.2), ('corrAns', 'b')]),
      OrderedDict([('loc1', -0.2), ('loc2', 0.2), ('loc3', 0.4), ('loc4', -0.2), ('loc5', 0.0), ('loc6', -0.2), ('loc7', 0.0), ('loc8', 0.2), ('loc9', -0.4), ('loc10', -0.2), ('loc11', 0.0), ('loc12', 0.0), ('loc13', None), ('loc14', None), ('corrAns', 'm')]),
      OrderedDict([('loc1', 0.4), ('loc2', -0.2), ('loc3', None), ('loc4', None), ('loc5', -0.4), ('loc6', 0.0), ('loc7', 0.4), ('loc8', 0.2), ('loc9', 0.0), ('loc10', 0.2), ('loc11', 0.2), ('loc12', -0.2), ('loc13', 0.0), ('loc14', 0.0), ('corrAns', 'b')])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
    Routine trial1
  LoopTerminator trials1
  Routine breakTime1
  LoopInitiator trials2 loopType="TrialHandler"
    conditionsFile = vSearchCond2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('loc1', 0.2), ('loc2', 0.2), ('loc3', -0.4), ('loc4', -0.2), ('loc5', 0.4), ('loc6', -0.2), ('loc7', 0.0), ('loc8', 0.0), ('loc9', -0.2), ('loc10', 0.2), ('loc11', None), ('loc12', None), ('loc13', -0.4), ('loc14', -0.4), ('loc15', 0.4), ('loc16', -0.4), ('loc17', 0.2), ('loc18', 0.4), ('loc19', 0.0), ('loc20', -0.4), ('loc21', -0.2), ('loc22', 0.4), ('loc23', 0.4), ('loc24', 0.4), ('loc25', -0.4), ('loc26', 0.2), ('corrAns', 'b')]),
      OrderedDict([('loc1', 0.0), ('loc2', 0.2), ('loc3', 0.4), ('loc4', 0.0), ('loc5', -0.2), ('loc6', 0.2), ('loc7', 0.0), ('loc8', 0.0), ('loc9', -0.4), ('loc10', -0.2), ('loc11', 0.4), ('loc12', 0.2), ('loc13', -0.2), ('loc14', -0.4), ('loc15', 0.0), ('loc16', -0.4), ('loc17', 0.2), ('loc18', 0.4), ('loc19', 0.2), ('loc20', -0.4), ('loc21', -0.4), ('loc22', 0.4), ('loc23', 0.4), ('loc24', -0.4), ('loc25', None), ('loc26', None), ('corrAns', 'm')]),
      OrderedDict([('loc1', -0.2), ('loc2', 0.2), ('loc3', 0.4), ('loc4', -0.2), ('loc5', 0.4), ('loc6', 0.0), ('loc7', 0.2), ('loc8', 0.2), ('loc9', None), ('loc10', None), ('loc11', 0.0), ('loc12', 0.0), ('loc13', -0.4), ('loc14', -0.4), ('loc15', 0.4), ('loc16', -0.4), ('loc17', 0.0), ('loc18', 0.4), ('loc19', -0.2), ('loc20', -0.4), ('loc21', -0.2), ('loc22', 0.4), ('loc23', 0.2), ('loc24', 0.4), ('loc25', 0.0), ('loc26', -0.2), ('corrAns', 'b')]),
      OrderedDict([('loc1', None), ('loc2', None), ('loc3', 0.0), ('loc4', 0.2), ('loc5', 0.4), ('loc6', -0.2), ('loc7', -0.4), ('loc8', -0.2), ('loc9', 0.0), ('loc10', 0.0), ('loc11', 0.2), ('loc12', 0.2), ('loc13', -0.2), ('loc14', -0.4), ('loc15', 0.4), ('loc16', -0.4), ('loc17', 0.0), ('loc18', 0.4), ('loc19', 0.2), ('loc20', -0.4), ('loc21', -0.4), ('loc22', 0.4), ('loc23', 0.2), ('loc24', 0.4), ('loc25', 0.2), ('loc26', -0.2), ('corrAns', 'b')])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
    Routine trial2
  LoopTerminator trials2
  Routine breakTime2
  LoopInitiator trials3 loopType="TrialHandler"
    conditionsFile = vSearchCond3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('loc1', None), ('loc2', None), ('loc3', -0.4), ('loc4', -0.2), ('loc5', 0.4), ('loc6', -0.2), ('loc7', 0.0), ('loc8', 0.0), ('loc9', -0.2), ('loc10', 0.2), ('loc11', 0.2), ('loc12', 0.2), ('loc13', -0.4), ('loc14', -0.4), ('loc15', 0.4), ('loc16', -0.4), ('loc17', 0.2), ('loc18', 0.4), ('loc19', 0.0), ('loc20', -0.4), ('loc21', -0.2), ('loc22', 0.4), ('loc23', 0.4), ('loc24', 0.4), ('loc25', 0.0), ('loc26', 0.4), ('loc27', 0.4), ('loc28', 0.2), ('loc29', -0.4), ('loc30', 0.4), ('loc31', -0.2), ('loc32', 0.0), ('loc33', -0.4), ('loc34', 0.2), ('loc35', 0.2), ('loc36', 0.0), ('loc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,
      OrderedDict([('loc1', 0.0), ('loc2', 0.2), ('loc3', 0.4), ('loc4', 0.0), ('loc5', -0.2), ('loc6', 0.2), ('loc7', 0.0), ('loc8', 0.0), ('loc9', -0.4), ('loc10', -0.2), ('loc11', 0.4), ('loc12', 0.2), ('loc13', -0.2), ('loc14', -0.4), ('loc15', 0.0), ('loc16', -0.4), ('loc17', 0.2), ('loc18', 0.4), ('loc19', 0.2), ('loc20', -0.4), ('loc21', -0.4), ('loc22', 0.4), ('loc23', 0.4), ('loc24', -0.4), ('loc25', -0.2), ('loc26', 0.4), ('loc27', 0.4), ('loc28', 0.4), ('loc29', 0.0), ('loc30', 0.4), ('loc31', 0.4), ('loc32', -0.2), ('loc33', -0.4), ('loc34', 0.2), ('loc35', -0.4), ('loc36', 0.0), ('loc37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,
      OrderedDict([('loc1', -0.2), ('loc2', 0.2), ('loc3', -0.4), ('loc4', -0.2), ('loc5', -0.4), ('loc6', 0.0), ('loc7', None), ('loc8', None), ('loc9', 0.2), ('loc10', 0.2), ('loc11', 0.0), ('loc12', 0.0), ('loc13', -0.4), ('loc14', -0.4), ('loc15', 0.4), ('loc16', -0.4), ('loc17', 0.0), ('loc18', 0.4), ('loc19', -0.2), ('loc20', -0.4), ('loc21', -0.2), ('loc22', 0.4), ('loc23', 0.2), ('loc24', 0.4), ('loc25', 0.0), ('loc26', 0.2), ('loc27', -0.2), ('loc28', 0.0), ('loc29', 0.2), ('loc30', -0.2), ('loc31', 0.0), ('loc32', -0.2), ('loc33', 0.4), ('loc34', 0.0), ('loc35', 0.4), ('loc36', 0.2), ('loc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,
      OrderedDict([('loc1', 0.2), ('loc2', 0.2), ('loc3', -0.4), ('loc4', 0.2), ('loc5', -0.4), ('loc6', -0.2), ('loc7', 0.0), ('loc8', 0.2), ('loc9', None), ('loc10', None), ('loc11', 0.4), ('loc12', -0.2), ('loc13', -0.2), ('loc14', -0.4), ('loc15', 0.4), ('loc16', -0.4), ('loc17', 0.0), ('loc18', 0.4), ('loc19', 0.2), ('loc20', -0.4), ('loc21', -0.4), ('loc22', 0.4), ('loc23', 0.2), ('loc24', 0.4), ('loc25', -0.4), ('loc26', -0.4), ('loc27', -0.2), ('loc28', 0.4), ('loc29', 0.0), ('loc30', -0.4), ('loc31', 0.4), ('loc32', 0.2), ('loc33', 0.4), ('loc34', 0.4), ('loc35', 0.4), ('loc36', 0.0), ('loc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
    Routine trial3
  LoopTerminator trials3
  Routine end
